PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = fresh_final
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Check if key press occurred during this frame
        keys = key_resp.getKeys(keyList=['space', 'escape'], waitRelease=False)

        if keys:
            # 1. Capture the keypress data and reaction time
            thisKey = keys[0]
            rt = thisKey.rt

            # Save reaction time and key name to your output data file
            thisExp.addData('reaction_time', rt)
            thisExp.addData('key_pressed', thisKey.name)

            # 2. Force ALL sound components to stop immediately
            sound_1.stop()


            # 3. Handle ESC vs SPACE
            if 'escape' in thisKey.name:
                core.quit()  # Immediately exit the entire experiment cleanly
            else:
                continueRoutine = False  # Move immediately to the next trial
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $videosource_last
      size = (0.888, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    PolygonComponent polygon
      fillColor = white
      nVertices = 100
      opacity [set every repeat] = circle_opacity_last
      pos [set every repeat] = (0, Circle_y_last)
      shape = regular polygon...
      size = (0.1, 0.1)
      startVal [condition] = movie.status == STARTED and (t - movie.tStart) >= circle_start_last
      stopVal [duration (s)] = 0.25
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = $voice
      startVal [time (s)] = 0.0
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  Routine welcome
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome to the experiment
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  Routine blank
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    ImageComponent image
      image = visual/Screenshot 2026-07-15 122000.png
      opacity = 0
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine instructions
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    KeyboardComponent key_resp_2
      allowedKeys = "return"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Press the SPACEBAR when you see a circle on the screen

        Please press ENTER to continue
  Routine finish
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = The experiment is finished. 
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = sequence.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trial_number': 1, 'trial_file': 'trials/step1.xlsx'},
      {'trial_number': 2, 'trial_file': 'trials/step1.xlsx'},
      {'trial_number': 3, 'trial_file': 'trials/step1.xlsx'},
      {'trial_number': 4, 'trial_file': 'trials/step1.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = step1.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'congruency_last': 'congruent', 'videosource_last': 'visual/concept_devil_c.mp4', 'context_last': 'concept', 'word_last': 'devil', 'Circle_y_last': -0.4, 'circle_start_last': 5.094, 'SOA_last': 'soa_4', 'circle_opacity_last': 1, 'duration_last': 9},
        {'congruency_last': 'congruent', 'videosource_last': 'visual/concept_devil_c.mp4', 'context_last': 'concept', 'word_last': 'devil', 'Circle_y_last': -0.4, 'circle_start_last': 5.294, 'SOA_last': 'soa_6', 'circle_opacity_last': 1, 'duration_last': 9},
        {'congruency_last': 'congruent', 'videosource_last': 'visual/concept_devil_c.mp4', 'context_last': 'concept', 'word_last': 'devil', 'Circle_y_last': -0.4, 'circle_start_last': 5.494, 'SOA_last': 'soa_8', 'circle_opacity_last': 1, 'duration_last': 9},
        {'congruency_last': 'congruent', 'videosource_last': 'visual/concept_devil_c.mp4', 'context_last': 'concept', 'word_last': 'devil', 'Circle_y_last': -0.4, 'circle_start_last': 5.694, 'SOA_last': 'soa_10', 'circle_opacity_last': 1, 'duration_last': 9},
        {'congruency_last': 'congruent', 'videosource_last': 'visual/concept_devil_c.mp4', 'context_last': 'concept', 'word_last': 'devil', 'Circle_y_last': -0.4, 'circle_start_last': 5.094, 'SOA_last': 'soa_4', 'circle_opacity_last': 1, 'duration_last': 9},
        {'congruency_last': 'congruent', 'videosource_last': 'visual/concept_devil_c.mp4', 'context_last': 'concept', 'word_last': 'devil', 'Circle_y_last': -0.4, 'circle_start_last': 5.294, 'SOA_last': 'soa_6', 'circle_opacity_last': 1, 'duration_last': 9}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
      Routine trial
      Routine blank
    LoopTerminator trials
  LoopTerminator trials_2
  Routine finish
